PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ABstudy
  keyboardBackend = ioHub
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Routines
  Routine AB_Test
    VariableComponent curImage
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        trialClock = core.Clock()
      Begin Routine:
        t = 0
        trialClock.reset()
        imageCount = 0
        #imgOnScreen = False
      Each Frame:
        t = trialClock.getTime()

        curImage = "resources\\JPG\\" + Img1
        imageCount = 1

        if t>StimLength + 1.5:
            curImage = "resources\\JPG\\" + Img2
            imageCount = 2

        if t>StimLength*2 + 1.5:
            curImage = "resources\\JPG\\" + Img3
            imageCount = 3

        if t>StimLength*3 + 1.5:
            curImage = "resources\\JPG\\" + Img4
            imageCount = 4

        if t>StimLength*4 + 1.5:
            if Img5 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img5
                imageCount = 5

        if t>StimLength*5 + 1.5:
            if Img6 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img6
                imageCount = 6

        if t>StimLength*6 + 1.5:
            if Img7 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img7
                imageCount = 7

        if t>StimLength*7 + 1.5:
            if Img8 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img8
                imageCount = 8

        if t>StimLength*8 + 1.5:
            if Img9 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img9
                imageCount = 9

        if t>StimLength*9 + 1.5:
            if Img10 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img10
                imageCount = 10

        if t>StimLength*10 + 1.5:
            if Img11 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img11
                imageCount = 11

        if t>StimLength*11 + 1.5:
            if Img12 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img12
                imageCount = 12

        if t>StimLength*12 + 1.5:
            if Img13 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img13
                imageCount = 13

        if t>StimLength*13 + 1.5:
            if Img14 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img14
                imageCount = 14

        if t>StimLength*14 + 1.5:
            if Img15 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img15
                imageCount = 15

        if t>StimLength*15 + 1.5:
            if Img16 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img16
                imageCount = 16

        if t>StimLength*16 + 1.5:
            if Img17 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img17
                imageCount = 17

        curImage = curImage + ".jpg"
    TextComponent text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cueWord
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    TextComponent Fixation_Cross
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent Rapid_Image_Present
      image [set every frame] = $curImage
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
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  Routine T1_Response
    TextComponent T1Response
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $T1cue
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T2_Response
    TextComponent T2Response
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Did you see the blender?
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = Instructions here
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    KeyboardComponent End_Instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_AB_Test
    VariableComponent Prac_curImage
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        trialClock = core.Clock()
      Begin Routine:
        t = 0
        trialClock.reset()
        imageCount = 0
        #imgOnScreen = False
      Each Frame:
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cueWord
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    TextComponent Fixation_Cross_2
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent Rapid_Image_Present_2
      image [set every frame] = $curImage
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
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  Routine Practice_T1
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent T1Response_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $T1cue
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  Routine Practice_T2
    TextComponent T2Response_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Did you see the blender?
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_Instructions
    TextComponent Practice_Ins
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = Practice trials instructions here
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    KeyboardComponent End_Prac_Ins
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Practice_Instructions
  LoopInitiator Practice_Trials loopType="TrialHandler"
    conditionsFile = C:/Users/User/OneDrive/Documents/GitHub/Test/Practice_Condition.xlsx
    loopType = random
    nReps = 1
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    Routine Practice_AB_Test
    Routine Practice_T1
    Routine Practice_T2
  LoopTerminator Practice_Trials
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Condition_Spreadsheet.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 4, 'TotalImg': 15, 'cueWord': 'fish', 'T1cue': 'Did you see the fish?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'sock01a', 'Img2': 'spoon01', 'Img3': 'umbrella04', 'Img4': 'comb02a', 'Img5': 'printer02', 'Img6': 'rockbass', 'Img7': 'lamp04a', 'Img8': 'bagel', 'Img9': 'greenolive', 'Img10': 'computerkeyboard02', 'Img11': 'blender', 'Img12': 'scarf', 'Img13': 'teabag', 'Img14': 'watermelon01', 'Img15': 'battery02b', 'Img16': None, 'Img17': None, 'T1_Identity': 'rockbass', 'Distractor1': 'sock01a', 'Distractor2': 'spoon01', 'Distractor3': 'umbrella04', 'Distractor4': 'comb02a', 'Distractor5': 'printer02', 'Distractor6': 'medal02b', 'Distractor7': 'lamp04a', 'Distractor8': 'bagel', 'Distractor9': 'greenolive', 'Distractor10': 'computerkeyboard02', 'Distractor11': 'cauliflower01', 'Distractor12': 'scarf', 'Distractor13': 'teabag', 'Distractor14': 'watermelon01', 'Distractor15': 'battery02b', 'Distractor16': 'potato02b'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 3, 'TotalImg': 15, 'cueWord': 'Rollerblade', 'T1cue': 'Did you see the Rollerblade?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'hammer01', 'Img2': 'sponge01', 'Img3': 'toaster01', 'Img4': 'cherry01', 'Img5': 'feather03a', 'Img6': 'mushroom01', 'Img7': 'rollerblade', 'Img8': 'pencil01', 'Img9': 'tennisball01b', 'Img10': 'brick', 'Img11': 'clock04', 'Img12': 'blender', 'Img13': 'teabag', 'Img14': 'garlic01a', 'Img15': 'envelope03a', 'Img16': None, 'Img17': None, 'T1_Identity': 'rollerblade', 'Distractor1': 'hammer01', 'Distractor2': 'sponge01', 'Distractor3': 'toaster01', 'Distractor4': 'cherry01', 'Distractor5': 'feather03a', 'Distractor6': 'mushroom01', 'Distractor7': 'measuringcup01', 'Distractor8': 'pencil01', 'Distractor9': 'tennisball01b', 'Distractor10': 'brick', 'Distractor11': 'clock04', 'Distractor12': 'medal02b', 'Distractor13': 'teabag', 'Distractor14': 'garlic01a', 'Distractor15': 'envelope03a', 'Distractor16': 'orange'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 4, 'TotalImg': 15, 'cueWord': 'saxophone', 'T1cue': 'Did you see the saxophone?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'pizza', 'Img2': 'strawberry', 'Img3': 'potato02b', 'Img4': 'speaker04', 'Img5': 'battery02b', 'Img6': 'saxophone', 'Img7': 'dice05a', 'Img8': 'cellphone', 'Img9': 'globe', 'Img10': 'banana01', 'Img11': 'blender', 'Img12': 'baseball01a', 'Img13': 'toaster01', 'Img14': 'broom01', 'Img15': 'ring01', 'Img16': None, 'Img17': None, 'T1_Identity': 'saxophone', 'Distractor1': 'pizza', 'Distractor2': 'strawberry', 'Distractor3': 'potato02b', 'Distractor4': 'speaker04', 'Distractor5': 'battery02b', 'Distractor6': 'iron01b', 'Distractor7': 'dice05a', 'Distractor8': 'cellphone', 'Distractor9': 'globe', 'Distractor10': 'banana01', 'Distractor11': 'medal02b', 'Distractor12': 'baseball01a', 'Distractor13': 'toaster01', 'Distractor14': 'broom01', 'Distractor15': 'ring01', 'Distractor16': 'cherry01'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 5, 'TotalImg': 16, 'cueWord': 'scooter', 'T1cue': 'Did you see the scooter?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'thermometer02b', 'Img2': 'candle08b', 'Img3': 'comb02a', 'Img4': 'toothbrush03b', 'Img5': 'brick', 'Img6': 'scooter', 'Img7': 'key01', 'Img8': 'pineapple01a', 'Img9': 'candy', 'Img10': 'bowl02a', 'Img11': 'blender', 'Img12': 'stapler03a', 'Img13': 'teabag', 'Img14': 'medal02b', 'Img15': 'balloon01b', 'Img16': 'banana01', 'Img17': None, 'T1_Identity': 'scooter', 'Distractor1': 'thermometer02b', 'Distractor2': 'candle08b', 'Distractor3': 'comb02a', 'Distractor4': 'toothbrush03b', 'Distractor5': 'brick', 'Distractor6': 'computerkeyboard02', 'Distractor7': 'key01', 'Distractor8': 'pineapple01a', 'Distractor9': 'candy', 'Distractor10': 'bowl02a', 'Distractor11': 'clock04', 'Distractor12': 'stapler03a', 'Distractor13': 'teabag', 'Distractor14': 'medal02b', 'Distractor15': 'balloon01b', 'Distractor16': 'banana01'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 3, 'TotalImg': 14, 'cueWord': 'ladder', 'T1cue': 'Did you see the ladder?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'celery', 'Img2': 'orange', 'Img3': 'scissors01', 'Img4': 'balloon01b', 'Img5': 'avocado01', 'Img6': 'stepladder', 'Img7': 'mushroom01', 'Img8': 'sewingmachine01a', 'Img9': 'lighter01', 'Img10': 'dice05a', 'Img11': 'blender', 'Img12': 'fan', 'Img13': 'cd', 'Img14': 'sock01a', 'Img15': None, 'Img16': None, 'Img17': None, 'T1_Identity': 'stepladder', 'Distractor1': 'celery', 'Distractor2': 'orange', 'Distractor3': 'scissors01', 'Distractor4': 'balloon01b', 'Distractor5': 'avocado01', 'Distractor6': 'printer02', 'Distractor7': 'mushroom01', 'Distractor8': 'sewingmachine01a', 'Distractor9': 'lighter01', 'Distractor10': 'dice05a', 'Distractor11': 'ashtray01', 'Distractor12': 'fan', 'Distractor13': 'cd', 'Distractor14': 'sock01a', 'Distractor15': 'sunglasses04', 'Distractor16': 'feather03a'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 4, 'TotalImg': 14, 'cueWord': 'License Plate', 'T1cue': 'Did you see the License Plate?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'toaster01', 'Img2': 'chain01', 'Img3': 'sponge01', 'Img4': 'baseball01a', 'Img5': 'licenseplate', 'Img6': 'belt02a', 'Img7': 'book01b', 'Img8': 'iron01b', 'Img9': 'grape01', 'Img10': 'blender', 'Img11': 'celery', 'Img12': 'onion', 'Img13': 'mushroom01', 'Img14': 'toothbrush03b', 'Img15': None, 'Img16': None, 'Img17': None, 'T1_Identity': 'licenseplate', 'Distractor1': 'toaster01', 'Distractor2': 'chain01', 'Distractor3': 'sponge01', 'Distractor4': 'baseball01a', 'Distractor5': 'carrot01', 'Distractor6': 'belt02a', 'Distractor7': 'book01b', 'Distractor8': 'iron01b', 'Distractor9': 'grape01', 'Distractor10': 'brick', 'Distractor11': 'celery', 'Distractor12': 'onion', 'Distractor13': 'mushroom01', 'Distractor14': 'toothbrush03b', 'Distractor15': 'lipstick02a', 'Distractor16': 'screw02'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 4, 'TotalImg': 15, 'cueWord': 'shower', 'T1cue': 'Did you see the shower?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'dice05a', 'Img2': 'watch02a', 'Img3': 'ruler05', 'Img4': 'lighter01', 'Img5': 'button01', 'Img6': 'shower', 'Img7': 'paintbrush01', 'Img8': 'microscope', 'Img9': 'plate01b', 'Img10': 'pen04b', 'Img11': 'blender', 'Img12': 'stapler03a', 'Img13': 'carrot01', 'Img14': 'shirt02', 'Img15': 'globe', 'Img16': None, 'Img17': None, 'T1_Identity': 'shower', 'Distractor1': 'dice05a', 'Distractor2': 'watch02a', 'Distractor3': 'ruler05', 'Distractor4': 'lighter01', 'Distractor5': 'button01', 'Distractor6': 'strawberry', 'Distractor7': 'paintbrush01', 'Distractor8': 'microscope', 'Distractor9': 'plate01b', 'Distractor10': 'pen04b', 'Distractor11': 'feather03a', 'Distractor12': 'stapler03a', 'Distractor13': 'carrot01', 'Distractor14': 'shirt02', 'Distractor15': 'globe', 'Distractor16': 'garlic01a'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 3, 'TotalImg': 14, 'cueWord': 'wrench', 'T1cue': 'Did you see the wrench?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'cherry01', 'Img2': 'bagel', 'Img3': 'envelope03a', 'Img4': 'condom', 'Img5': 'shirt02', 'Img6': 'stubbywrench01a', 'Img7': 'sewingmachine01a', 'Img8': 'candle08b', 'Img9': 'battery02b', 'Img10': 'apple07', 'Img11': 'blender', 'Img12': 'screwdriver04b', 'Img13': 'strawberry', 'Img14': 'sunglasses04', 'Img15': None, 'Img16': None, 'Img17': None, 'T1_Identity': 'stubbywrench01a', 'Distractor1': 'cherry01', 'Distractor2': 'bagel', 'Distractor3': 'envelope03a', 'Distractor4': 'condom', 'Distractor5': 'shirt02', 'Distractor6': 'cellphone', 'Distractor7': 'sewingmachine01a', 'Distractor8': 'candle08b', 'Distractor9': 'battery02b', 'Distractor10': 'apple07', 'Distractor11': 'pencil01', 'Distractor12': 'screwdriver04b', 'Distractor13': 'strawberry', 'Distractor14': 'sunglasses04', 'Distractor15': 'feather03a', 'Distractor16': 'rice'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 5, 'TotalImg': 15, 'cueWord': 'baseball bat', 'T1cue': 'Did you see the baseball bat?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'pizza', 'Img2': 'printer02', 'Img3': 'medal02b', 'Img4': 'spoon01', 'Img5': 'baseballbat', 'Img6': 'lighter01', 'Img7': 'belt02a', 'Img8': 'watermelon01', 'Img9': 'celery', 'Img10': 'blender', 'Img11': 'screw02', 'Img12': 'comb02a', 'Img13': 'cauliflower01', 'Img14': 'lipstick02a', 'Img15': 'potato02b', 'Img16': None, 'Img17': None, 'T1_Identity': 'baseballbat', 'Distractor1': 'pizza', 'Distractor2': 'printer02', 'Distractor3': 'medal02b', 'Distractor4': 'spoon01', 'Distractor5': 'grape01', 'Distractor6': 'lighter01', 'Distractor7': 'belt02a', 'Distractor8': 'watermelon01', 'Distractor9': 'celery', 'Distractor10': 'battery02b', 'Distractor11': 'screw02', 'Distractor12': 'comb02a', 'Distractor13': 'cauliflower01', 'Distractor14': 'lipstick02a', 'Distractor15': 'potato02b', 'Distractor16': 'staples'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 8, 'T2Loc': 13, 'PreDistractor': 7, 'PostDistractor': 5, 'TotalImg': 18, 'cueWord': 'bed', 'T1cue': 'Did you see the bed?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'pencil01', 'Img2': 'broccoli01a', 'Img3': 'button01', 'Img4': 'sponge01', 'Img5': 'watermelon01', 'Img6': 'lipstick02a', 'Img7': 'comb02a', 'Img8': 'bed', 'Img9': 'lighter01', 'Img10': 'sock01a', 'Img11': 'spoon01', 'Img12': 'blueberry01', 'Img13': 'blender', 'Img14': 'onion', 'Img15': 'grape01', 'Img16': 'avocado01', 'Img17': 0, 'T1_Identity': 'bed', 'Distractor1': 'pencil01', 'Distractor2': 'broccoli01a', 'Distractor3': 'button01', 'Distractor4': 'sponge01', 'Distractor5': 'watermelon01', 'Distractor6': 'lipstick02a', 'Distractor7': 'comb02a', 'Distractor8': 'fan', 'Distractor9': 'lighter01', 'Distractor10': 'sock01a', 'Distractor11': 'spoon01', 'Distractor12': 'blueberry01', 'Distractor13': 'belt02a', 'Distractor14': 'onion', 'Distractor15': 'grape01', 'Distractor16': 'avocado01'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 5, 'TotalImg': 16, 'cueWord': 'keys', 'T1cue': 'Did you see the keys?', 'StimLength': 0.2, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'toiletpaper01a', 'Img2': 'mushroom01', 'Img3': 'medal02b', 'Img4': 'sandal', 'Img5': 'rice', 'Img6': 'key07', 'Img7': 'feather03a', 'Img8': 'pizza', 'Img9': 'candle08b', 'Img10': 'garlic01a', 'Img11': 'blender', 'Img12': 'belt02a', 'Img13': 'cigarette', 'Img14': 'violin', 'Img15': 'lemon02', 'Img16': 'fork03c', 'Img17': None, 'T1_Identity': 'key07', 'Distractor1': 'toiletpaper01a', 'Distractor2': 'mushroom01', 'Distractor3': 'medal02b', 'Distractor4': 'sandal', 'Distractor5': 'rice', 'Distractor6': 'cd', 'Distractor7': 'feather03a', 'Distractor8': 'pizza', 'Distractor9': 'candle08b', 'Distractor10': 'garlic01a', 'Distractor11': 'toaster01', 'Distractor12': 'belt02a', 'Distractor13': 'cigarette', 'Distractor14': 'violin', 'Distractor15': 'lemon02', 'Distractor16': 'fork03c'},
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    Routine AB_Test
    Routine T1_Response
    Routine T2_Response
  LoopTerminator trials
